PsychoPy2experiment version="3.2.4"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Save csv file = True
  Save excel file = True
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  expName = stroopExperiment
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Routines
  Routine trial
    TextComponent Target
      color [set every repeat] = $colour
      letterHeight = 0.1
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 4
      text [set every repeat] = $word
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    KeyboardComponent response
      allowedKeys = 'left','right','up', 'down'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      storeCorrect = True
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  Routine Instructions
    TextComponent InstruText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Ignore the word and choose the colour of the letters.
        Press the space-bar to continue.

        RED= left
        BLUE= right
        GREEN= down
        YELLOW= up
    KeyboardComponent key_resp_2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Feedback_3
    CodeComponent code
      Code Type = Py
      Begin Experiment:
        picturefile = ['correct.jpeg', 'incorrect.jpeg']
      Begin Routine:
        if response.corr:
            picture = picturefile[0]
        else:
            picture = picturefile[1]
    ImageComponent image
      image [set every repeat] = $picture
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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Flow
  Routine Instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    loopType = random
    nReps = 5
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    conditions:
      [OrderedDict([('word', 'red'), ('colour', 'red'), ('congruent', 1), ('corrAns', 'left')]),
      OrderedDict([('word', 'red'), ('colour', 'blue'), ('congruent', 0), ('corrAns', 'right')]),
      OrderedDict([('word', 'red'), ('colour', 'green'), ('congruent', 0), ('corrAns', 'down')]),
      OrderedDict([('word', 'red'), ('colour', 'yellow'), ('congruent', 0), ('corrAns', 'up')]),
      OrderedDict([('word', 'blue'), ('colour', 'blue'), ('congruent', 1), ('corrAns', 'right')]),
      OrderedDict([('word', 'blue'), ('colour', 'green'), ('congruent', 0), ('corrAns', 'down')]),
      OrderedDict([('word', 'blue'), ('colour', 'yellow'), ('congruent', 0), ('corrAns', 'up')]),
      OrderedDict([('word', 'green'), ('colour', 'green'), ('congruent', 1), ('corrAns', 'down')]),
      OrderedDict([('word', 'green'), ('colour', 'yellow'), ('congruent', 0), ('corrAns', 'up')]),
      OrderedDict([('word', 'yellow'), ('colour', 'yellow'), ('congruent', 1), ('corrAns', 'up')])]
    Routine trial
    Routine Feedback_3
  LoopTerminator trials
